PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = FingerTracking
  keyboardBackend = ioHub
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Routines
  Routine pre_training
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Please point and look at one anothers fingertips for 60 seconds.
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        mytext = "Please point and look at one anothers fingertips for 60 seconds."

        language = 'en'

        myobj = gTTS(text=mytext, lang= language, slow=False)

        #create an mp3 file
        myobj.save("pretrial.mp3")

        #play the generated file
        os.system("mpg321 ./pretrial.mp3")

        # remove the generated file
        os.remove("./pretrial.mp3")
    KeyboardComponent skip_1
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine training
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text [set every repeat] = $prompt
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        language = 'en'

        myobj = gTTS(text=prompt, lang= language, slow=False)

        #create an mp3 file
        myobj.save("trial.mp3")

        #play the generated file
        os.system("mpg321 ./trial.mp3")

        # remove the generated file
        os.remove("./trial.mp3")
    KeyboardComponent skip_2
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine post_training
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Please point and look at one anothers fingertips for 60 seconds.
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        mytext = "Please point and look at one anothers fingertips for 60 seconds."

        language = 'en'

        myobj = gTTS(text=mytext, lang= language, slow=False)

        #create an mp3 file
        myobj.save("pretrial.mp3")

        #play the generated file
        os.system("mpg321 ./pretrial.mp3")

        # remove the generated file
        os.remove("./pretrial.mp3")
    KeyboardComponent skip_3
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Please rest for 15 seconds.
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        mytext = "Please rest for 15 seconds."

        language = 'en'

        myobj = gTTS(text=mytext, lang= language, slow=False)

        #create an mp3 file
        myobj.save("rest.mp3")

        #play the generated file
        os.system("mpg321 ./rest.mp3")

        # remove the generated file
        os.remove("./rest.mp3")
  Routine intro
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Finger Tracking and Eye Gaze Task

        There are three parts of this task: pre-training, training, and post-training task.

        During pre and post training you will simply point at one anothers finger tips while looking at the other participants finger tips.

        During the training phase one participant will be the leader while the other will be the follower. You will be asked to either hold averted, direct, or natural eye contact during the training phase.

        Please press the Spacebar to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from gtts import gTTS
        import os
  Routine finish
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = That's all. Thank you!
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Flow
  Routine intro
  LoopInitiator pre_training_trials loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine pre_training
    Routine rest
  LoopTerminator pre_training_trials
  LoopInitiator training_trials loopType="TrialHandler"
    conditionsFile = loopTemplate2.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [{'leader': 'A', 'gaze': 'direct', 'prompt': 'Participant A please lead. Both participants please maintain eye contact.'},
      {'leader': 'A', 'gaze': 'indirect', 'prompt': 'Participant A please lead. Both participants please avoid  eye contact.'},
      {'leader': 'B', 'gaze': 'direct', 'prompt': 'Participant B please lead. Both participants please maintain  eye contact.'},
      {'leader': 'B', 'gaze': 'indirect', 'prompt': 'Participant B please lead. Both participants please avoid  eye contact.'}]
    Routine training
    Routine rest
  LoopTerminator training_trials
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine post_training
    Routine rest
  LoopTerminator trials
  Routine finish
